CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:16
HasImagePlaneDetails:False
MessageForUser:|Now that you have loaded a pipeline, you will need to provide CellProfiler with images to analyze.\n\nDrag the folder containing the example images (downloaded to the same location on your computer\nas the pipeline) into the Images module, placing them into the File list panel labelled "Drop files and\nfolders here". Or, right-click in the File list panel to browse for the individual files to process.\n\nThen, press the "Analyze Images" button to process the images so you can see how the pipeline works.

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '---', 'Load the images by matching files in the folder against the unique text pattern for each stain: d0.tif for nuclei, d1.tif for the PH3 image. The two images together comprise an image set.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (file does contain "d0.tif")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "d1.tif")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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notes:['Crop the nuclei image down to a 200 x 200 rectangle by entering specific coordinates.']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
    Select the input image:OrigBlue
    Name the output image:CropBlue
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,200
    Top and bottom rectangle positions:1,200
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    Remove empty rows and columns?:Edges
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
Crop:[module_num:6|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notes:['Use the same cropping from the nuclei image for the PH3 image.']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
    Select the input image:OrigGreen
    Name the output image:CropGreen
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:First
    Left and right rectangle positions:1,200
    Top and bottom rectangle positions:1,200
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    Remove empty rows and columns?:Edges
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
IdentifyPrimaryObjects:[module_num:7|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notes:['Identify the nuclei from the nuclear stain image. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:CropBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):8,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:NucOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Identify the mitotic features from the PH3 image. Some manual adjustment of the maxima supression distance is required to optimize segmentation.']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
    Select the input image:CropGreen
    Name the primary objects to be identified:PH3
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:7
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.000000,1.000000
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
RelateObjects:[module_num:9|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notes:['One way to determine whether a nucleus is PH3-positive or negative is to establish a parent-child between the PH3 ("children") and the nuclei ("parents") in order to determine which mitotic object belong to which nuclei.']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
    Select the input child objects:PH3
    Select the input parent objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
ClassifyObjects:[module_num:10|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notes:['You can classify the objects with this module to obtain the percentage of PH3-positive and -negative nuclei. The number of PH3 children per-cell is 1 or more with PH3-positive nuclei, so the cutoff is set 0.5 since it is between 0 and 1.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Children_PH3_Count
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.5
    Give each bin a name?:Yes
    Enter the bin names separated by commas:NoPH3Objs,SomePH3Objs
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
MeasureObjectIntensity:[module_num:11|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notes:['Another way to determine whether a nucleus is PH3-positive is to measure the nucleus intensity from the PH3 channel.']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
    Hidden:1
    Select an image to measure:CropGreen
    Select objects to measure:Nuclei

DisplayDataOnImage:[module_num:12|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notes:['Here, we display the per-nuclei median intensities overlaid on the nuclei so we can visually determine a cutoff. Fortunately, the phenotype is clearly discernable, so a cutoff can be easily chosen in this case.']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
    Display object or image measurements?:Object
    Select the input objects:Nuclei
    Measurement to display:Intensity_MedianIntensity_CropGreen
    Select the image on which to display the measurements:CropGreen
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes

ClassifyObjects:[module_num:13|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notes:['Again, we classify the nuclei, this time on the basis of the median intensity measurement with 0.1 as the empirically determined cutoff.']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
    Make each classification decision on how many measurements?:Single measurement
    Hidden:1
    Select the object to be classified:Nuclei
    Select the measurement to classify by:Intensity_MedianIntensity_CropGreen
    Select bin spacing:Custom-defined bins
    Number of bins:3
    Lower threshold:0
    Use a bin for objects below the threshold?:Yes
    Upper threshold:1
    Use a bin for objects above the threshold?:Yes
    Enter the custom thresholds separating the values between bins:0.1
    Give each bin a name?:Yes
    Enter the bin names separated by commas:PH3Neg,PH3Pos
    Retain an image of the classified objects?:No
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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
FilterObjects:[module_num:14|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notes:['The last approach is to filter the nuclei on the basis of the number of PH3 children. The number of PH3-positive nuclei is the same as before, but in this case, the filtered nuclei can be used downstream for further analysis.']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
    Name the output objects:PH3PosNuclei
    Select the object to filter:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:No
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:Children_PH3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:15|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notes:['CalculateMath can also be used to obtain a per-image percentage of PH3-positive nuclei if ClassifyObjects is not practical to use for your assay: Divide the PH3 nuclei count by the total nuclei count and multiply by 100. ']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
    Name the output measurement:PercentPositive
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_PH3PosNuclei
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_Nuclei
    Multiply the above operand by:1
    Raise the power of above operand by:1
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1
    Add to the result:0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
ExportToSpreadsheet:[module_num:16|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notes:['Export the per-image measurements to a comma-delimited file (.csv).']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
